PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = priming
  keyboardBackend = ioHub
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Routines
  Routine Exposure
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent Stim
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $stim
    TextComponent Question
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      text = Living or nonliving?
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine Test
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $stim2
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    KeyboardComponent key_resp_2
      allowedKeys = 'z','m'
      correctAns = $corr_response
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Instruction_prime
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        On each trial, a word will be shown.

        If the word is likely to be a living object, press 'z'; otherwise, press 'm'

        Press the 'spacebar' to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine Instruction_target
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        On each trial, a word will be shown.

        If it is a real word, press 'z'; if it is a non-word, press 'm'. Do your best to answer as quickly as possible for each word.

        Press the 'spacebar' to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine Instruction_prime
  LoopInitiator prime loopType="TrialHandler"
    conditionsFile = PrimingPhase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'house'},
      {'stimulus': 'worm'},
      {'stimulus': 'zebra'},
      {'stimulus': 'apple'},
      {'stimulus': 'fork'},
      {'stimulus': 'sink'},
      {'stimulus': 'finger'},
      {'stimulus': 'pencil'},
      {'stimulus': 'key'},
      {'stimulus': 'phone'}]
    Routine Exposure
  LoopTerminator prime
  Routine Instruction_target
  LoopInitiator Target loopType="TrialHandler"
    conditionsFile = TestingPhase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulusT': 'house', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'worm', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'zebra', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'apple', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'fork', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'sink', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'finger', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'pencil', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'key', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'phone', 'condition': 'prime', 'corr_response': 'c'},
      {'stimulusT': 'cat', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'brick', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'mirror', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'flower', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'pan', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'soap', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'armor', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'pillow', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'belt', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'cup', 'condition': 'new', 'corr_response': 'c'},
      {'stimulusT': 'rodo', 'condition': 'scrambled', 'corr_response': 'm'},
      {'stimulusT': 'noom', 'condition': 'scrambled', 'corr_response': 'm'}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
    Routine Test
  LoopTerminator Target
